PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = untitled
  Screen = 1
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Routines
  Routine test
    MovieComponent test_movie
      movie [set every repeat] = $movies
      forceEndRoutine = False
      units = norm
      startVal [time (s)] = 0.0
      backend = moviepy
      size = [2, 2]
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  Routine knowledge
    TextComponent knowledge_resp
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Знаете ли Вы, что такое Эффект МакГурка?

        Стрелка вверх - да
        Стрелка вниз - нет
    KeyboardComponent knowledge_response
      forceEndRoutine = True
      allowedKeys = 'up', 'down'
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent test_instuctions
      startVal [time (s)] = 0.0
      font = Segoe Script
      letterHeight = 0.06
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      text:
        Привет!
        Сейчас Вам будут показаны видеозаписи по 5-6 секунд. Ваша задача - понять, что говорит девушка.

        1. Надо просмотреть видеозапись полностью
        2. Когда появятся слова "Ваш ответ", необходимо записать на бумаге, что, по Вашему мнению, говорит девушка.
        3. Видео нельзя пересматривать.
        4. Видео могут повторяться.

        Чтобы продолжить, нажмите пробел.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text_2
      text = Спасибо за участие :)
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine response
    KeyboardComponent resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Ваш ответ
Flow
  Routine instruction
  LoopInitiator test_loop loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'movies': u'unvoiced/akvk.mov', 'audio': u'ka', 'video': u'ka'},
      {'movies': u'unvoiced/akvp.mov', 'audio': u'ka', 'video': u'pa'},
      {'movies': u'unvoiced/akvt.mov', 'audio': u'ka', 'video': u'ta'},
      {'movies': u'unvoiced/apvk.mov', 'audio': u'pa', 'video': u'ka'},
      {'movies': u'unvoiced/apvp.mov', 'audio': u'pa', 'video': u'pa'},
      {'movies': u'unvoiced/apvt.mov', 'audio': u'pa', 'video': u'ta'},
      {'movies': u'unvoiced/atvt.mov', 'audio': u'ta', 'video': u'ta'},
      {'movies': u'unvoiced/atvk.mov', 'audio': u'ta', 'video': u'ka'},
      {'movies': u'unvoiced/atvp.mov', 'audio': u'ta', 'video': u'pa'}]
    Routine test
    Routine response
  LoopTerminator test_loop
  Routine knowledge
  Routine thanks
